<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.ONIX;assembly=Bonsai.ONIX"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ONIContext">
          <p1:ContextConfiguration>
            <p1:Slot>
              <p1:Driver>riffa</p1:Driver>
              <p1:Index>0</p1:Index>
            </p1:Slot>
            <p1:ReadSize>2048</p1:ReadSize>
            <p1:WriteSize>2048</p1:WriteSize>
          </p1:ContextConfiguration>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:AnalogIODevice">
          <p1:DeviceAddress>
            <p1:HardwareSlot>
              <p1:Driver>riffa</p1:Driver>
              <p1:Index>0</p1:Index>
            </p1:HardwareSlot>
            <p1:Address>6</p1:Address>
          </p1:DeviceAddress>
          <p1:BlockSize>100</p1:BlockSize>
          <p1:DataType>S16</p1:DataType>
          <p1:EnableStream>true</p1:EnableStream>
          <p1:InputRange00>TenVolts</p1:InputRange00>
          <p1:InputRange01>TenVolts</p1:InputRange01>
          <p1:InputRange02>TenVolts</p1:InputRange02>
          <p1:InputRange03>TenVolts</p1:InputRange03>
          <p1:InputRange04>TenVolts</p1:InputRange04>
          <p1:InputRange05>TenVolts</p1:InputRange05>
          <p1:InputRange06>TenVolts</p1:InputRange06>
          <p1:InputRange07>TenVolts</p1:InputRange07>
          <p1:InputRange08>TenVolts</p1:InputRange08>
          <p1:InputRange09>TenVolts</p1:InputRange09>
          <p1:InputRange10>TenVolts</p1:InputRange10>
          <p1:InputRange11>TenVolts</p1:InputRange11>
          <p1:Direction00>Input</p1:Direction00>
          <p1:Direction01>Input</p1:Direction01>
          <p1:Direction02>Output</p1:Direction02>
          <p1:Direction03>Output</p1:Direction03>
          <p1:Direction04>Output</p1:Direction04>
          <p1:Direction05>Output</p1:Direction05>
          <p1:Direction06>Output</p1:Direction06>
          <p1:Direction07>Output</p1:Direction07>
          <p1:Direction08>Output</p1:Direction08>
          <p1:Direction09>Output</p1:Direction09>
          <p1:Direction10>Output</p1:Direction10>
          <p1:Direction11>Output</p1:Direction11>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Data</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>C:\Users\emily\Desktop\testing_audio_</dsp:Path>
          <dsp:Suffix>Timestamp</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Name>chirp</ipy:Name>
        <ipy:Script>import math
from System import Tuple

@returns(str)
def process(value):
  chirp_str="2_0.7"


  return chirp_str
</ipy:Script>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>COM14</port:PortName>
          <port:NewLine>\r\n</port:NewLine>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>