<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.Pylon;assembly=Bonsai.Pylon"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p2="clr-namespace:BonsaiPackage1;assembly=BonsaiPackage1"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:PylonCapture">
          <p1:SerialNumber>24121204</p1:SerialNumber>
          <p1:ParameterFile>C:\Users\emily\Desktop\acA2040-90umNIR_24121204.pfs</p1:ParameterFile>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:MorphologicalOperator">
            <cv:Size>
              <cv:Width>2</cv:Width>
              <cv:Height>2</cv:Height>
            </cv:Size>
            <cv:Anchor>
              <cv:X>-1</cv:X>
              <cv:Y>-1</cv:Y>
            </cv:Anchor>
            <cv:Shape>Rectangle</cv:Shape>
            <cv:Iterations>1</cv:Iterations>
            <cv:Operation>Erode</cv:Operation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:MorphologicalOperator">
            <cv:Size>
              <cv:Width>20</cv:Width>
              <cv:Height>20</cv:Height>
            </cv:Size>
            <cv:Anchor>
              <cv:X>-1</cv:X>
              <cv:Y>-1</cv:Y>
            </cv:Anchor>
            <cv:Shape>Rectangle</cv:Shape>
            <cv:Iterations>1</cv:Iterations>
            <cv:Operation>Dilate</cv:Operation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Area</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>100</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:ZaberDevice">
          <p2:PortName>COM3</p2:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CreatePoint2f">
          <cv:X>1024</cv:X>
          <cv:Y>1024</cv:Y>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it *-100.0</scr:Expression>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it *100.0</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:SampleInterval">
            <rx:Interval>PT1S</rx:Interval>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:ZaberMove" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Gray2Bgr</cv:Conversion>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="20" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="17" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="17" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source3" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>