<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:ZaberMovement;assembly=ZaberMovement"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ZaberDevice">
          <p1:PortName>COM3</p1:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0.001S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ZaberLocation" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\emily\Desktop\data\zaber_coords_.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>num_crickets_eaten</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>locations</Name>
        <Description>locations</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="cricket_1" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>A1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="cricket_2" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>A1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="cricket_4" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>A1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="cricket_8" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>A1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="cricket_16" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>A1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="cricket_32" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>A1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="cricket_64" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>A1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="cricket_128" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>A1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>location_list</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>@returns(bool)
def process(value):
  return True</ipy:Script>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>C:\Users\emily\Desktop\data\locations_.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="locations_csv" />
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>C:\Users\emily\Desktop\data\zaber_centers_20240507.csv</io:FileName>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>location_list</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="16" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="16" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="16" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="16" Label="Source4" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="16" Label="Source5" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="16" Label="Source6" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="16" Label="Source7" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source8" />
            <Edge From="16" To="18" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="19" To="21" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="zaber_radius" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>5500</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="loudness_experiment" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="play_from_ceiling" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0.001S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="LessThanOrEqual">
        <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
          <Value>1200</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>CheckCondition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>isNotMoving</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
              <Property Name="Period" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Timer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" />
                    <Property Name="Period" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT1S</rx:DueTime>
                      <rx:Period>PT2S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:BufferTrigger">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>CheckCondition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>isNotInside</ipy:Name>
              <ipy:Script>import math
from System import Tuple

@returns(Tuple[str,str,bool])
def process(value):
  zaber=value[0][0]
  zaber_l = int(zaber[0])
  zaber_ax = int(zaber[1])
  intval = int(value[0][1])
  list_of_locs = value[0][2]
  radius=value[0][3]
  loudness=value[0][4]
  playabove=value[0][5]
  first=intval*2
  second=first+1
  cricket_l = list_of_locs[first]
  cricket_ax = list_of_locs[second]
  release_val=2**intval
  if playabove:
    chirp_val=9
  else:
    chirp_val=release_val
  dist=math.sqrt((int(cricket_l-zaber_l)*int(cricket_l-zaber_l))+(int(cricket_ax-zaber_ax)*int(cricket_ax-zaber_ax)))
  if loudness:
    mult = (dist/140000)*0.75
    if mult &lt; 0.15:
      mult=0.15
    elif mult &gt; 0.75:
      mult=0.75
  else:
    mult=0.4
  chirp_str="{}_{:.2f}".format(chirp_val,mult)

  if dist &lt; radius:
    is_not_inside=False
    print('is inside, dist is {} radius is {}'.format(dist,radius))
  else:
    is_not_inside=True
    print('is not inside, dist is {} radius is {}'.format(dist,radius))

  return Tuple[str,str,bool](chirp_str,str(release_val),is_not_inside)
</ipy:Script>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="arduinoPort_1" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>COM6</io:PortName>
                <io:NewLine>\r\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="arduinoPort_2" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>COM7</io:PortName>
                <io:NewLine>\r\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="arduinoPort_4" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>COM8</io:PortName>
                <io:NewLine>\r\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="arduinoPort_8" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:SerialStringWrite">
                <io:PortName>COM9</io:PortName>
                <io:NewLine>\r\n</io:NewLine>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item3</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>isInside</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="11" Label="Source1" />
            <Edge From="1" To="13" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="2" To="8" Label="Source1" />
            <Edge From="2" To="10" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\emily\Desktop\data\release_trigger_output_.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="releasePort" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>COM4</port:PortName>
          <port:NewLine>\r\n</port:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
        <rx:Name>num_crickets_eaten</rx:Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="17" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="17" Label="Source2" />
      <Edge From="10" To="17" Label="Source3" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="17" Label="Source4" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="17" Label="Source5" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source6" />
      <Edge From="17" To="28" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="24" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="24" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source3" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="31" To="35" Label="Source2" />
      <Edge From="31" To="36" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>