<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dlc="clr-namespace:Bonsai.DeepLabCut;assembly=Bonsai.DeepLabCut"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>C:\Users\emily\Desktop\20251121_forsleap\video_basler_2024-02-22T12_00_20.avi</cv:FileName>
          <cv:PlaybackRate>12</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DLC</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ModelFileName" />
              <Property Name="MinConfidence" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dlc:PredictPose">
                <dlc:ModelFileName>C:\Users\emily\Desktop\sleap\rigtesting-thedennislab-2022-07-19\exported-models\DLC_rigtesting_resnet_50_iteration-6_shuffle-1\snapshot-1030000.pb</dlc:ModelFileName>
                <dlc:PoseConfigFileName>C:\Users\emily\Desktop\sleap\rigtesting-thedennislab-2022-07-19\exported-models\DLC_rigtesting_resnet_50_iteration-6_shuffle-1\pose_cfg.yaml</dlc:PoseConfigFileName>
                <dlc:MinConfidence>0.5</dlc:MinConfidence>
                <dlc:ScaleFactor xsi:nil="true" />
                <dlc:ColorConversion>Bgr2Rgb</dlc:ColorConversion>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dlc:GetBodyPart">
                <dlc:Name>nose</dlc:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position.X</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dlc:GetBodyPart">
                <dlc:Name>tail_tip</dlc:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position.X</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dlc:GetBodyPart">
                <dlc:Name>T_left</dlc:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position.X</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dlc:GetBodyPart">
                <dlc:Name>T_right</dlc:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position.X</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dlc:GetBodyPart">
                <dlc:Name>T_cross</dlc:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position.X</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dlc:GetBodyPart">
                <dlc:Name>T_base</dlc:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position.X</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dlc:GetBodyPart">
                <dlc:Name>dot_head</dlc:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position.X</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position.Y</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position.Y</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position.Y</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position.Y</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position.Y</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position.Y</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Position.Y</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="2" To="11" Label="Source1" />
            <Edge From="2" To="13" Label="Source1" />
            <Edge From="2" To="15" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="18" Label="Source1" />
            <Edge From="4" To="17" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="19" Label="Source1" />
            <Edge From="6" To="17" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="7" To="20" Label="Source1" />
            <Edge From="8" To="17" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="9" To="21" Label="Source1" />
            <Edge From="10" To="17" Label="Source4" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="11" To="22" Label="Source1" />
            <Edge From="12" To="17" Label="Source5" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="13" To="23" Label="Source1" />
            <Edge From="14" To="17" Label="Source6" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="15" To="24" Label="Source1" />
            <Edge From="16" To="17" Label="Source7" />
            <Edge From="17" To="26" Label="Source1" />
            <Edge From="18" To="25" Label="Source1" />
            <Edge From="19" To="25" Label="Source2" />
            <Edge From="20" To="25" Label="Source3" />
            <Edge From="21" To="25" Label="Source4" />
            <Edge From="22" To="25" Label="Source5" />
            <Edge From="23" To="25" Label="Source6" />
            <Edge From="24" To="25" Label="Source7" />
            <Edge From="25" To="26" Label="Source2" />
            <Edge From="26" To="27" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>C:\Users\emily\Desktop\20251121_forsleap\DLC_all.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>