<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:sleap="clr-namespace:Bonsai.Sleap;assembly=Bonsai.Sleap"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties>
            <cv:CapturePropertyAssignment>
              <cv:Property>FrameHeight</cv:Property>
              <cv:Value>1896</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>FrameWidth</cv:Property>
              <cv:Value>1896</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>Fps</cv:Property>
              <cv:Value>12</cv:Value>
            </cv:CapturePropertyAssignment>
          </cv:CaptureProperties>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:PredictSinglePose">
          <sleap:ModelFileName>C:\Users\emily\Desktop\sleap\frozen_graph.pb</sleap:ModelFileName>
          <sleap:TrainingConfig>C:\Users\emily\Desktop\sleap\confmap_config.json</sleap:TrainingConfig>
          <sleap:PartMinConfidence>0.6</sleap:PartMinConfidence>
          <sleap:ScaleFactor>1</sleap:ScaleFactor>
          <sleap:ColorConversion xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>nose</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>dot_head</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>T_left</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>T_cross</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>T_right</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>T_base</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="sleap:GetBodyPart">
          <sleap:Name>tail_tip</sleap:Name>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Position.Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>C:\Users\emily\Desktop\sleap\test.avi</cv:FileName>
          <cv:Suffix>FileCount</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>12</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="24" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="6" Label="Source1" />
      <Edge From="2" To="9" Label="Source1" />
      <Edge From="2" To="12" Label="Source1" />
      <Edge From="2" To="15" Label="Source1" />
      <Edge From="2" To="18" Label="Source1" />
      <Edge From="2" To="21" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="21" To="23" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>